PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2021.2.3
  Window size (pixels) = [1920, 1080]
  expName = rdk-discrimination
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Routines
  Routine trial
    DotsComponent dots
      coherence = 1.0
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 1.0
      nDots = 100
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Instruction
Flow
  Routine Instruction
